//This macro is used to measure the area of a selected region. Input images should already be pre-processed to delete the unselected area and leave only the region that you
//want to measure the area of. 
//Create a folder that only contains the images that you want to measure the area of.
//Create another folder called "Area" on Desktop to export the Result file into.
//This macro was originally written to analyse the area of the selected cells for the macropinocytosis assay.

selectedFolder = getDirectory("Choose Source Directory "); //Choose a folder (directory) where your original images are.

fileList = getFileList(selectedFolder); //the getFileList function returns an array of all the file names present in the selectedFolder.

numFiles = lengthOf(fileList); //the lengthOf function counts the number of files in the fileList array (which, by extension, is in the source directory).

saveloc = getDirectory("Choose Ouput Directory"); //Choose a folder where the exported images are to be saved in.
//print(numFiles) //This is optional but you can print out the number of files from the original folder as a way of checking if the code is working.

setBatchMode(true); //BatchMode on automatically shutdown any image window as they are being processed. Turn this off will lead to the windows being open. 

//This whole block below is an iteration command that will go through each file in the Source Directory and execute the command attached.
for (i=0;i<numFiles;i++) { //This means as long as the i value is less than the total number of files in the selected Folder, it will increase by 1 each time and the command is executed. 
	file = fileList[i]; //I believe this is indexing the file eg from 0 to i, whatever i is.
	open(selectedFolder + file);
	setAutoThreshold("Default dark");
	run("Threshold...");
	setThreshold(1, 250);
	run("Analyze Particles...", "  show=Outlines display summarize");
	selectWindow("Results"); //This select the Result window where the measurements are
	saveAs("Results", "/Users/ale/Desktop/Area/Results.csv"); //This saves the Results file to the folder called "Area"
	run("Close All");
}
